#### DO NOT TOUCH  THIS FILE IS GOOD
f(x)=a*sqrt((x-c)/(1-exp(-b*(x-c))))

ampe'=0
per'=0
# get the periodic from this
sea1'=per*(-sea1+f(gee*(p*sea1+(1-p)*seb1)+gne*(p*sna1+(1-p)*snb1)-gie*sif1-thre))/taue
seb1'=per*(-seb1+f(gee*(p*seb1+(1-p)*sea1)+gne*(p*snb1+(1-p)*sna1)-gie*sif1-thre))/taue
sif1'=per*(-sif1+f(gei*(sea1+seb1)/2+gni*(sna1+snb1)/2-gii*sif1-thri))/taui
sna1'=per*(-sna1+an*sea1*(1-sna1))/taun
snb1'=per*(-snb1+an*seb1*(1-snb1))/taun
# apply the stimulus
sea2'=per*(-sea2+f(gee*(p*sea2+(1-p)*seb2)+gne*(p*sna2+(1-p)*snb2)-gie*sif2-thre))/taue
seb2'=per*(-seb2+f(gee*(p*seb2+(1-p)*sea2)+gne*(p*snb2+(1-p)*sna2)-gie*sif2-thre+ampe))/taue
sif2'=per*(-sif2+f(gei*(sea2+seb2)/2+gni*(sna2+snb2)/2-gii*sif2-thri+ampi))/taui
sna2'=per*(-sna2+an*sea2*(1-sna2))/taun
snb2'=per*(-snb2+an*seb2*(1-snb2))/taun

# wait for one more cycle to check if winner!
sea3'=per*(-sea3+f(gee*(p*sea3+(1-p)*seb3)+gne*(p*sna3+(1-p)*snb3)-gie*sif3-thre))/taue
seb3'=per*(-seb3+f(gee*(p*seb3+(1-p)*sea3)+gne*(p*snb3+(1-p)*sna3)-gie*sif3-thre))/taue
sif3'=per*(-sif3+f(gei*(sea3+seb3)/2+gni*(sna3+snb3)/2-gii*sif3-thri))/taui
sna3'=per*(-sna3+an*sea3*(1-sna3))/taun
snb3'=per*(-snb3+an*seb3*(1-snb3))/taun


par sec=2.5
init ampe=19.34
init per=21.32
init sea1=2.5,seb1=0,sif1=.48827,sna1=.6376,snb1=0
init sea2=2.5,seb2=0,sif2=.48827,sna2=.6376,snb2=0
init sea3=.001157,seb3=7.12699,sif3=3.6839,sna3=.5922,snb3=.4896
# define ratios
!gne=rne_e*gee
!gni=rne_i*gei
!taui=rtau*taue
!thri=rthr*thre
!ampi=ramp*ampe

# boundary conditions
# periodic start
b sea1-sec
b sea1'-sec
b sna1-sna1'
b snb1-snb1'
b sif1-sif1'
b seb1-seb1'

# continuity at the stim start
b sea2-sea1'
b seb2-seb1'
b sif2-sif1'
b sna2-sna1'
b snb2-snb1'

# continuity at the stim end
b sea3-sea2'
b seb3-seb2'
b sif3-sif2'
b sna3-sna2'
b snb3-snb2'

# the hitting condition
b sna3'-snb3'

aux df=sna3-snb3
# parameters
par gee=20,rne_e=.75
par gei=10,rne_i=.5
par gie=30,gii=5
par p=.9
par an=1
par taue=2,rtau=2,taun=80
par thre=5,rthr=1
par ramp=0
par a=1,b=20,c=0
@ dt=.0005,total=1

done

period=21.5
